PsychoPy2experiment version="1.84.0"
Settings
  Monitor = testMonitor
  Experiment info = {u'session': u'001', u'participant': u''}
  Units = use prefs
  Window size (pixels) = [1440, 900]
  Full-screen window = True
  expName = ChEC_movieratings
  Screen = 1
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Routines
  Routine thankyou
    TextComponent text
      text = Thanks!
      stopVal [duration (s)] = 5
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine instructions
    TextComponent welcome
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Welcome!

        we will start as soon as you hit the y key.
    KeyboardComponent start_movie
      forceEndRoutine = True
      discard previous = False
      allowedKeys = 'y'
      startVal [time (s)] = 0
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    CodeComponent init_joystick
  Routine playmovie
    MovieComponent kingjulian
      movie = /Users/catcamacho/Box/LCBD/ChEC/AHKJ_S01E02.mp4
      stopVal [duration (s)] = 1284
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      backend = moviepy
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    KeyboardComponent premature_quit
      stopVal [duration (s)] = 1284
      forceEndRoutine = True
      allowedKeys = 'q'
      startVal [time (s)] = 0.0
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    CodeComponent joystick
Flow
  Routine instructions
  Routine playmovie
  Routine thankyou
