PsychoPy2experiment version="1.84.2"
Settings
  Monitor = testMonitor
  Experiment info = {u'session': u'001', u'participant': u''}
  Units = use prefs
  Window size (pixels) = [1920, 1080]
  Full-screen window = True
  expName = ChEC_movie_scanner
  Screen = 1
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Routines
  Routine thankyou
    TextComponent text
      text = Thank you!
      stopVal [duration (s)] = 5
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine instructions
    ImageComponent waitimage
      startVal [time (s)] = 0.0
      image = C:\Users\iView X\Desktop\ChEC\stimuli\waitslide.png
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    KeyboardComponent start_movie
      forceEndRoutine = True
      discard previous = False
      allowedKeys = '^'
      startVal [time (s)] = 0
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  Routine playmovie
    MovieComponent kingjulian
      movie = C:\Users\iView X\Desktop\ChEC\stimuli\AHKJ_S01E02.mp4
      stopVal [duration (s)] = 1284
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      backend = moviepy
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    KeyboardComponent premature_quit
      stopVal [duration (s)] = 1284
      forceEndRoutine = True
      allowedKeys = 'q'
      startVal [time (s)] = 0.0
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Flow
  Routine instructions
  Routine playmovie
  Routine thankyou
