PsychoPy2experiment version="1.85.6"
Settings
  Monitor = testMonitor
  Experiment info = {u'session': u'001', u'participant': u'', u'mode': u'scan', u'version': u'mac'}
  Units = use prefs
  Window size (pixels) = [1920, 1080]
  Full-screen window = True
  expName = Mac_ChEC_movie_scanner_1.0
  Screen = 1
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Routines
  Routine thankyou
    TextComponent text
      text = Thank you!
      stopVal [duration (s)] = 5
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine waitscreen
    ImageComponent waitimage
      startVal [time (s)] = 0.0
      image = /Users/catcamacho/Box/LCBD/ChEC/stimuli/waitslide.png
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    KeyboardComponent prepforscan
      forceEndRoutine = True
      allowedKeys = 'equal'
      startVal [time (s)] = 0.0
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  Routine playmovie
    MovieComponent kingjulian
      movie = /Users/catcamacho/Box/LCBD/ChEC/stimuli/AHKJ_S01E02_orig.mp4
      stopVal [duration (s)] = 1284
      forceEndRoutine = True
      startEstim = 0
      startVal [time (s)] = 0
      backend = moviepy
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    KeyboardComponent premature_quit
      stopVal [duration (s)] = 1284
      forceEndRoutine = True
      startEstim = 0
      allowedKeys = 'q'
      startVal [time (s)] = 0
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Flow
  Routine waitscreen
  Routine playmovie
  Routine thankyou
